%% iPeriodicSpikes.mech

% Spike train properties
gSpike = .1;
Esyn = 0;
tau_d = 5; % decay time, in ms
tau_1 = 0; % rise time, in ms
Sfreq = 20; % in Hz
Sshift = 0; % in ms
inputs_per_cell = 1;
jitter = 0; % 1000/Sfreq*.05; % in ms

% Time series properties
Tend = T(end); 	    % ms, max simulation duration
dt = 0.01;        % ms, time step duration
Sonset = 0;    % ms, onset time
Soffset = Inf;   % ms, offset time
Strial = Inf;

psp = rhythmic_spike(tau_d,tau_1,Sfreq,Sshift,Tend,dt,Sonset,Soffset,Npop,inputs_per_cell,jitter,Strial)

% Functions
input(X) = psp(k,:)
Ispike(X) = gSpike.*input(X).*(X-Esyn)

@current += -Ispike(X)
