gSYN = [0.045]
gSYNnoise = [0]
ESYN = [0]
tauDx = [1]
tauRx = [0.25]
IC = [0.1]
IC_noise = [0]

fanout = inf
% UB = max(Npre,Npost)
% Xpre = linspace(1,UB,Npre)'*ones(1,Npost)
% Xpost = ones(Npre, 1)*linspace(1,UB,Npost)
% leftperm = zeros(Npre);
% rightperm = zeros(Npost);
% left_column_indices = randperm(Npre); right_row_indices = randperm(Npost);
% for i = 1:Npre
% mask = Xpre-Xpost >= 0 & Xpre-Xpost < fanout | Xpre-Xpost < 0 & UB-(Xpost-Xpre) < fanout
mask = makeSYNmask(Npre, Npost, fanout)

gsyn=unifrnd(gSYN-gSYNnoise,gSYN+gSYNnoise,[1 Npost])
ISYN(Vpost,sSYNpre) = gsyn.*(sSYNpre*mask).*(Vpost-ESYN)
%ISYN(V,s) = gsyn.*(s*netcon).*(X-EAMPA)

sSYNpre' = -sSYNpre./tauDx + ((1-sSYNpre)/tauRx).*(1+tanh(Vpre/10))/2;
sSYNpre(0) = IC+IC_noise.*rand(Npre,1)

@current += -ISYN(Vpost,sSYNpre)
